PsychoPy2experiment version="2024.2.1post4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = Foreperiod_task
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine Welcome_Screen
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    TextComponent Welcome_Text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Welcome the study! When the + appears, prepare to click. When the ! appears click with your mouse as quickly as possible
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    MouseComponent mouse_2
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine Debug_Text
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    UnknownComponent Debug_Text_2
      backgroundFit = none
      color = $[0,0,0]
      colorSpace = rgb
      syncScreenRefresh = False
      useWindowParams = False
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        ri = np.random.normal(0.75,0.2,1)
        pc = np.random.randint(100, size=1)
        tn = np.random.randint(3, size=1)
  Routine SURPRISE
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    UnknownComponent SURPRISE_2
      backgroundFit = none
      color = $[0,0,0]
      colorSpace = rgb
      syncScreenRefresh = False
      useWindowParams = False
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  Routine Trial_2
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    CodeComponent code_2
      Code Type = Py
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      Before Experiment:
        DEBUG = False
      Begin Experiment:
        import serial
        import time
        import random

        if not DEBUG:
            port = serial.Serial('COM4', baudrate=115200)  # Only initialize port in lab
        else:
            port = None  # Disable port for testing

        # Define a function to send a trigger
        def send_trigger(trigger_code):
            if port:  # Only send triggers if port is initialized Send the trigger code as a byte
                port.write(trigger_code.to_bytes(1, 'big'))
                time.sleep(0.01)  # Pause to ensure the trigger is sent
            else:
                print("Trigger skipped (DEBUG mode)")




        # Set total number of trials
        total_trials = 800  # Adjust as needed
        num_long = int(total_trials * 0.45)
        num_short = int(total_trials * 0.45)
        num_surprise = total_trials - num_long - num_short  # Ensures no rounding issues

        # Create a list of trials with their attributes
        trial_list = []

        # Populate the list with "long" trials
        for _ in range(num_long):
            trial_list.append({
                'type': 'long',
                'stim_dur': 2,
                'trigger_f': 4,
                'trigger_p': 5,
                'mouse_trigger': [0x06]
            })

        # Populate the list with "short" trials
        for _ in range(num_short):
            trial_list.append({
                'type': 'short',
                'stim_dur': 0.5,
                'trigger_f': 1,
                'trigger_p': 2,
                'mouse_trigger': [0x03]
            })

        # Populate the list with "surprise" trials
        for _ in range(num_surprise):
            trial_list.append({
                'type': 'surprise',
                'stim_dur': random.uniform(1, 1.5),  # Random duration for surprise trials
                'trigger_f': 7,
                'trigger_p': 8,
                'mouse_trigger': [0x09]
            })

        # Shuffle the trials
        random.shuffle(trial_list)

        # Task setup
        break_text = 'You have reached a break. Tell the experimenter when you are ready to continue.'
        current_trial = 1
        break_text = 'You have reached a break. Tell the experimenter when you are ready to continue'
        message = 'none'
        task = 'task'
        avgrsp = 'N/A'
        rspnum = 0
        rsptot = 0

        # Loop through the trials
        for trial_number, trial in enumerate(trial_list, start=1):
            # Access the trial's attributes
            trial_type = trial['type']
            stim_dur = trial['stim_dur']
            trigger_f = trial['trigger_f']
            trigger_p = trial['trigger_p']
            mouse_trigger = trial['mouse_trigger']

            # Debugging print to confirm the trial details
            print(f"Trial {trial_number}: {trial_type}, Duration: {stim_dur}, Triggers: {trigger_f}, {trigger_p}")
      Begin Routine:
        polygon_pulse_started = False
        plus_pulse_started = False



        selected_trial = trial_list[current_trial]  # No need to access the list again since `trial` is the current element
        # Access the attributes of the selected trial
        trial_type = selected_trial['type']
        stim_dur = selected_trial['stim_dur']
        trigger_f = selected_trial['trigger_f']
        trigger_p = selected_trial['trigger_p']
        mouse_trigger = selected_trial['mouse_trigger']
      Each Frame:
        if port:
            if polygon.status == STARTED and not polygon_pulse_started: #Change 'stimulus' to match the name of the component that you want to send the trigger for
                win.callOnFlip(port.write, trigger_p.to_bytes(1, 'big'))
                stimulus_pulse_start_time = globalClock.getTime()
                polygon_pulse_started  = True
        if port:
            if PLUS_FP.status == STARTED and not plus_pulse_started: #Change 'stimulus' to match the name of the component that you want to send the trigger for
                win.callOnFlip(port.write, trigger_f.to_bytes(1, 'big'))
                stimulus_pulse_start_time = globalClock.getTime()
                plus_pulse_started  = True
      End Routine:
        RT = mouse.time[0]-stim_dur
        thisExp.addData("FixDur", stim_dur)
        thisExp.addData("Type", task)
        thisExp.addData("RT", RT)
    PolygonComponent PLUS_FP
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = $stim_dur
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    PolygonComponent polygon
      fillColor = white
      shape = arrow
      size = (0.5, 0.5)
      startVal [time (s)] = stim_dur
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    MouseComponent mouse
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0
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    PolygonComponent Photodiode_polygon
      fillColor = white
      pos = (.735, -0.44)
      shape = rectangle
      size = (0.11, 0.11)
      startVal [time (s)] = stim_dur
      stopVal [duration (s)] = .01
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    PolygonComponent Photodiode_plus
      fillColor = white
      pos = (.735, -0.44)
      shape = rectangle
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.2
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  Routine Trial_1
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    UnknownComponent Trial_3
      backgroundFit = none
      color = $[0,0,0]
      colorSpace = rgb
      syncScreenRefresh = False
      useWindowParams = False
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    PolygonComponent polygon_2
      fillColor = white
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Foreperiod
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    PolygonComponent polygon_3
      fillColor = white
      shape = arrow
      size = (0.5, 0.5)
      startVal [time (s)] = $Foreperiod
      stopVal [duration (s)] = 2
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = $Foreperiod
      stopVal [duration (s)] = 2
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Foreperiod
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  Routine ITI
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    UnknownComponent ITI_2
      backgroundFit = none
      color = $[0,0,0]
      colorSpace = rgb
      syncScreenRefresh = False
      useWindowParams = False
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  Routine Intertrial_Period
    RoutineSettingsComponent Intertrial_Period
      stopVal [duration (s)] = pause_dur
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    TextComponent text
      letterHeight = 0.05
      pos = (0, -.35)
      startVal [condition] = mouse.time[0]<stim_dur
      stopVal [duration (s)] = stim_dur
      text [set every frame] = $'You clicked too early, please wait for the the arrow to appear before clicking '
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        if port:  # Only send triggers if port is initialized
            port.write(mouse_trigger)
        else:
            print("Trigger skipped (DEBUG mode)")



        pause_dur = random.uniform(1.2,1.7)
        rspnum += 1
        current_trial += 1
        rsptot += mouse.time[0]-stim_dur
        if avgrsp == 'N/A':
            avgrsp = mouse.time[0]-stim_dur
        else:
            avgrsp = (rsptot+mouse.time[0]-stim_dur)/rspnum
    PolygonComponent Photodiode_2
      fillColor = white
      pos = (.735, -0.44)
      shape = rectangle
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.3
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    MouseComponent Intertrial_Mouse
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine BREAK
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    KeyboardComponent key_resp_5
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every frame] = $break_text
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        trial_number += 1
        if trial_number == 8:
            break_text = 'you have finished the task, please press space to exit'
Flow
  Routine Welcome_Screen
  LoopInitiator trials_3 loopType="TrialHandler"
    loopType = random
    nReps = 8
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    LoopInitiator trials_2 loopType="TrialHandler"
      loopType = random
      nReps = 100
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      Routine Trial_2
      Routine Intertrial_Period
    LoopTerminator trials_2
    Routine BREAK
  LoopTerminator trials_3
